begintemplate MOBopl_mTC_bSTUT_new_raw


// ls - long secondary dendrites 
//public init, morphology, geom_nseg_fixed, geom_nsec, getCell, getCCell, setCCell, gid, getCell
public gid

public soma, priden, secden, tuftden, hillock, initialseg, node, myelin
public all, secdens, tufts, dendritic, somatic, axonal, somden, ornsyn, vcinit
public  nsecden, ntuft, nmyelin

nmyelin=5
//create soma, priden, secden[2], tuftden[1], hillock, initialseg, node[nmyelin], myelin[nmyelin]
create soma[1], secden[34], priden, tuftden[5], hillock, initialseg, node[nmyelin], myelin[nmyelin]

objref dendritic, somatic, somden, synodor, external_syn, all, secdens, tufts, axonal
objref ornsyn
objref vc



proc vcinit() {
  priden vc = new VClamp(1)
  vc.dur[0] = 10
  vc.dur[1] = 0.1
  vc.dur[2] = 0
  vc.amp[0] = -55
  vc.amp[1] = 100
  vc.amp[2] = -55
}


proc init() {

	ornsyn = new List()
	ornsyn.remove_all()

	nsecden = 2
	ntuft = 1
	subsets()

  gid = $1

	topol()
	geometry()
	segments()
        
	memb()

  // Initialize random number generators
  re_init_rng()
}

proc createsec() {
	nsecden = $1
	ntuft = $2
        nmyelin=5  
  
	ornsyn.remove_all()

	create soma, priden, secden[nsecden], tuftden[ntuft], hillock, initialseg, node[nmyelin], myelin[nmyelin]
}

proc subsets() {
	all = new SectionList()
	forall all.append()
	
	secdens = new SectionList()
	forsec "secden" secdens.append()

	tufts = new SectionList()
	forsec "tuftden" tufts.append()

	dendritic = new SectionList()
	forsec "priden" dendritic.append()
	forsec secdens dendritic.append()
	forsec tufts dendritic.append()

	somatic = new SectionList()
	soma somatic.append

	axonal = new SectionList()
	initialseg axonal.append()
        forsec "node" axonal.append()
}



proc segments() {local i, dx

	soma.nseg = 1
	priden {
		if(n3d() > 1) nseg = n3d() - 1
	}
	forsec tufts {
		if(n3d() > 1) nseg = n3d() - 1
	}
	forsec secdens {
		if(n3d() > 1) nseg = n3d() - 1
	}
	initialseg.nseg = 3
	hillock.nseg = 3
}

// proc geometry() {local i
// 	soma { L = 25  diam = 20 }
// 	priden { L = 300  diam = 3 }
// //	forsec tufts {rallbranch=20 L=300  diam(0:1)=.4:.4 }
// 	forsec tufts {L=300  diam(0:1)=.4:.4 }
// 	forsec secdens { L=1000  diam=2 }
// 	initialseg{ L=30  diam=1.5}
// 	hillock { L=5  diam(0:1) = soma.diam(0) : initialseg.diam(0) }
//         forsec "node" { L=1 diam=1 }
//         forsec "myelin" { L=1000  diam=1.5}                 
// 	//define_shape()
// }
	





//   proc topol() {local i  localobj s
// 	if (numarg() > 0) if ($1 == 0) { // do not connect secondary dendrites
// 	}else{ // connect all secondary dendrites to soma (no branching)
// 		for i =0, nsecden-1 {
// 			connect secden[i](0), soma(.5)
// 		}
// 	}
// 	connect priden(0), soma(1)
// 	for i =0, ntuft-1 {
// 		connect tuftden[i](0), priden(1)
// 	}

// 	connect hillock(0), soma(0)
// 	connect initialseg(0), hillock(1)

              
//         connect myelin[0](0), initialseg(1)
//         for i = 0, nmyelin-1 {
//           connect node[i](0), myelin[i](1)
//           if (i == nmyelin-1) break
//           connect myelin[i+1](0), node[i](1)
//         }
//   }
  
  proc memb() { local tau, cap, Vrest
    Vrest = -55
    tau = 20180
    cap = 1
                
    sh = 10
                
    forall {
      insert ks gksbar_ks=0.0055 tp_ks=12.5 a0q_ks=2000 kp_ks=2.5 vhalfp_ks=-35-sh vhalfq_ks=-50-sh tvh_ks=-50-sh
      insert kamt gbar_kamt=0.004
      insert nax gbar_nax=0.04 sh_nax=15-sh
      insert pas g_pas=1/(tau/cap) Ra=150 cm=cap e_pas=Vrest
    }

    forsec "initialseg" {
      gksbar_ks=0
      gbar_kamt=0.06
      gbar_nax=2.5/1.15
      g_pas=1/(tau/cap/3)
    }
    
    forsec "node" {
      gksbar_ks=0
      gbar_kamt=0.06
      gbar_nax =2.5/1.15
      g_pas=1/(tau/cap/3)
    }
                
    forsec "myelin" {
      gksbar_ks=0
      gbar_kamt=0
      gbar_nax =0
      g_pas=1/(tau/cap/3*10/3)
      cm=cap/100
    }
    forall {
      ek=-80
      ena=40
    }
  }



  proc setup_orns() { localobj synodor
	for i=0,ntuft-1 tuftden[i] {
		synodor = new orn(0.5)
                synodor.noiseFromRandom123($1, $2+i)
		ornsyn.append(synodor)
	}

  }


proc topol() { local i
  for i = 0, 1 connect secden[i](0), soma(0.5)
  for i = 2, 3 connect secden[i](0), secden(1)
  for i = 4, 5 connect secden[i](0), secden[2](1)
  for i = 6, 7 connect secden[i](0), secden[3](1)
  for i = 8, 9 connect secden[i](0), secden[6](1)
  for i = 10, 11 connect secden[i](0), secden[8](1)
  for i = 12, 13 connect secden[i](0), secden[10](1)
  for i = 14, 15 connect secden[i](0), secden[9](1)
  for i = 16, 17 connect secden[i](0), secden[7](1)
  for i = 18, 19 connect secden[i](0), secden[16](1)
  for i = 20, 21 connect secden[i](0), secden[17](1)
  for i = 22, 23 connect secden[i](0), secden[1](1)
  for i = 24, 25 connect secden[i](0), secden[22](1)
  for i = 26, 27 connect secden[i](0), secden[25](1)
  for i = 28, 29 connect secden[i](0), secden[27](1)
  for i = 30, 31 connect secden[i](0), secden[28](1)
  for i = 32, 33 connect secden[i](0), secden[30](1)
  connect priden(0), soma(0.5)
  for i = 0, 4 connect tuftden[i](0), priden(1)
  basic_shape()

  connect hillock(0), soma(0)
  connect initialseg(0), hillock(1)

  connect myelin[0](0), initialseg(1)
  connect node[0](0), myelin[0](1)
  connect myelin[1](0), node[0](1)
  connect node[1](0), myelin[1](1)
  connect myelin[2](0), node[1](1)
  connect node[2](0), myelin[2](1)
  connect myelin[3](0), node[2](1)
  connect node[3](0), myelin[3](1)
  connect myelin[4](0), node[3](1)
  connect node[4](0), myelin[4](1)

// connect myelin[0](0), initialseg(1)
// 	for i = 0, nmyelin-1 {
// 	connect node[i](0), myelin[i](1)
// 	if (i == nmyelin-1) break
// 	connect myelin[i+1](0), node[i](1)
// 	}

}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-12.7736, 3.71796, 2.53249, 1.36696)
	pt3dadd(-11.4755, 3.34116, 2.27563, 1.30614)
	pt3dadd(-10.1774, 2.96436, 2.01878, 1.18453)
	pt3dadd(-8.87935, 2.58756, 1.76192, 1.06288)
	pt3dadd(-7.58127, 2.21076, 1.50506, 0.941234)
	pt3dadd(-6.28318, 1.83396, 1.2482, 0.819615)
	pt3dadd(-4.98509, 1.45716, 0.991344, 0.697928)
	pt3dadd(-3.68701, 1.08036, 0.734486, 0.576304)
	pt3dadd(-2.38892, 0.703564, 0.477628, 0.454675)
	pt3dadd(-1.09083, 0.326764, 0.22077, 0.333026)
	pt3dadd(0.207253, -0.0500362, -0.0360884, 0.211397)
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  }
}
proc shape3d_2() {
  priden {	pt3dadd(2.31486, 72.766, -11.3206, 4)
	pt3dadd(2.1612, 73.7527, -11.2302, 4)
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  }
}
proc shape3d_3() {
  secden[3] {	pt3dadd(32.7203, 7.63804, 34.4207, 2.05994)
	pt3dadd(32.8539, 7.75229, 35.4052, 2.05637)
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  }
}
proc shape3d_4() {
  secden[4] {	pt3dadd(233.905, 51.2596, 104.056, 1.40928)
	pt3dadd(234.853, 51.2994, 104.371, 1.40684)
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  }
}
proc shape3d_5() {
  secden[4] {	pt3dadd(427.578, 43.8928, 149.052, 0.99642)
	pt3dadd(428.549, 44.075, 149.208, 0.994693)
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  }
}
proc shape3d_6() {
  secden[4] {	pt3dadd(612.02, -6.7676, 172.592, 0.70451)
	pt3dadd(612.926, -7.11591, 172.834, 0.703289)
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  }
}
proc shape3d_7() {
  secden[5] {	pt3dadd(110.553, 31.668, 84.1929, 1.73813)
	pt3dadd(110.925, 31.5466, 85.1131, 1.73513)
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  }
}
proc shape3d_8() {
  secden[5] {	pt3dadd(222.177, 34.0481, 242.267, 1.22893)
	pt3dadd(222.614, 33.6974, 243.095, 1.22681)
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  }
}
proc shape3d_9() {
  secden[5] {	pt3dadd(341.039, -18.4907, 389.792, 0.868905)
	pt3dadd(341.428, -19.0558, 390.52, 0.867402)
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  }
}
proc shape3d_10() {
  secden[5] {	pt3dadd(463.78, -119.182, 507.278, 0.614352)
	pt3dadd(464.146, -119.572, 508.123, 0.613289)
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  }
}
proc shape3d_11() {
  secden[8] {	pt3dadd(123.16, 23.4091, 142.666, 1.56916)
	pt3dadd(124.037, 23.5464, 143.126, 1.56645)
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  }
}
proc shape3d_12() {
  secden[9] {	pt3dadd(94.6641, 21.8452, 187.41, 1.51831)
	pt3dadd(94.6429, 21.3975, 188.304, 1.51569)
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  }
}
proc shape3d_13() {
  secden[10] {	pt3dadd(397.86, 30.0632, 227.037, 0.936121)
	pt3dadd(398.781, 29.7733, 227.297, 0.934509)
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  }
}
proc shape3d_14() {
  secden[11] {	pt3dadd(392.31, -9.54396, 292.542, 0.90518)
	pt3dadd(393.166, -9.85402, 292.959, 0.90362)
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  }
}
proc shape3d_15() {
  secden[11] {	pt3dadd(559.525, -72.7441, 376.934, 0.63954)
	pt3dadd(560.313, -73.2, 377.352, 0.638437)
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  }
}
proc shape3d_16() {
  secden[12] {	pt3dadd(509.331, 2.4907, 208.13, 0.761633)
	pt3dadd(510.293, 2.34719, 208.363, 0.760324)
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  }
}
proc shape3d_17() {
  secden[12] {	pt3dadd(691.488, -62.6554, 182.732, 0.538505)
	pt3dadd(692.445, -62.9368, 182.802, 0.53758)
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  }
}
proc shape3d_18() {
  secden[12] {	pt3dadd(843.877, -173.416, 133.504, 0.380745)
	pt3dadd(844.677, -173.892, 133.139, 0.380091)
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  }
}
proc shape3d_19() {
  secden[13] {	pt3dadd(414.19, 25.2127, 232.569, 0.907337)
	pt3dadd(415.049, 25.0148, 233.041, 0.905781)
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  }
}
proc shape3d_20() {
  secden[14] {	pt3dadd(189.121, 5.69499, 304.474, 1.15852)
	pt3dadd(189.828, 5.63627, 305.179, 1.15653)
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  }
}
proc shape3d_21() {
  secden[14] {	pt3dadd(331.53, -30.8623, 436.511, 0.819118)
	pt3dadd(332.257, -31.2163, 437.099, 0.817715)
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  }
}
proc shape3d_22() {
  secden[14] {	pt3dadd(463.595, -116.393, 555.805, 0.57915)
	pt3dadd(464.319, -117.022, 556.088, 0.578158)
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  }
}
proc shape3d_23() {
  secden[16] {	pt3dadd(74.1175, 6.69422, 170.467, 1.58813)
	pt3dadd(74.5749, 6.85225, 171.342, 1.58542)
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  }
}
proc shape3d_24() {
  secden[18] {	pt3dadd(145.376, 16.8905, 232.128, 1.33714)
	pt3dadd(146.325, 16.7037, 232.394, 1.33486)
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  }
}
proc shape3d_25() {
  secden[18] {  }
  secden[19] {pt3dclear()
	pt3dadd(95.1477, 11.9145, 202.445, 1.48428)
	pt3dadd(95.3246, 11.767, 203.42, 1.48175)
	pt3dadd(95.5014, 11.6195, 204.395, 1.47921)
	pt3dadd(95.6783, 11.472, 205.37, 1.47668)
	pt3dadd(95.8551, 11.3245, 206.345, 1.47415)
	pt3dadd(96.032, 11.177, 207.32, 1.47161)
	pt3dadd(96.2089, 11.0295, 208.295, 1.46908)
	pt3dadd(96.3857, 10.882, 209.27, 1.46655)
	pt3dadd(96.5626, 10.7345, 210.245, 1.46401)
	pt3dadd(96.7395, 10.587, 211.22, 1.46148)
	pt3dadd(96.9163, 10.4395, 212.195, 1.45895)
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  }
}
proc shape3d_26() {
  secden[19] {	pt3dadd(106.221, -66.4951, 379.875, 1.04878)
	pt3dadd(106.47, -67.0295, 380.685, 1.04699)
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  }
}
proc shape3d_27() {
  secden[19] {	pt3dadd(146.143, -172.834, 541.114, 0.741064)
	pt3dadd(146.618, -173.448, 541.747, 0.739798)
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  }
}
proc shape3d_28() {
  secden[20] {	pt3dadd(63.2725, -25.16, 306.412, 1.24807)
	pt3dadd(63.595, -25.3344, 307.343, 1.24594)
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  }
}
proc shape3d_29() {
  secden[20] {	pt3dadd(131.154, -90.1006, 480.458, 0.882435)
	pt3dadd(131.387, -90.493, 481.347, 0.880932)
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  }
}
proc shape3d_30() {
  secden[21] {	pt3dadd(56.135, -23.035, 264.307, 1.34003)
	pt3dadd(56.3004, -23.4134, 265.218, 1.33767)
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  }
}
proc shape3d_31() {
  secden[23] {	pt3dadd(-43.7538, -8.97316, -34.0951, 2.03849)
	pt3dadd(-44.4373, -9.11725, -34.8107, 2.03491)
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  }
}
proc shape3d_32() {
  secden[23] {	pt3dadd(-164.259, -76.6362, -173.71, 1.44129)
	pt3dadd(-164.839, -76.9749, -174.451, 1.43876)
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  }
}
proc shape3d_33() {
  secden[23] {	pt3dadd(-265.395, -149.238, -318.733, 1.01905)
	pt3dadd(-265.752, -149.733, -319.526, 1.01727)
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  }
}
proc shape3d_34() {
  secden[24] {	pt3dadd(-129.491, -51.7561, -10.2904, 1.72911)
	pt3dadd(-130.229, -52.4166, -10.1542, 1.7261)
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  }
}
proc shape3d_35() {
  secden[25] {	pt3dadd(-142.077, -60.4283, -59.032, 1.6731)
	pt3dadd(-142.78, -60.9174, -59.5478, 1.6702)
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  }
}
proc shape3d_36() {
  secden[26] {	pt3dadd(-297.317, -167.166, -73.643, 1.18501)
	pt3dadd(-297.932, -167.933, -73.8247, 1.18295)
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  }
}
proc shape3d_37() {
  secden[28] {	pt3dadd(-259.545, -143.429, -91.4538, 1.27448)
	pt3dadd(-260.36, -144.006, -91.4004, 1.27228)
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  }
}
proc shape3d_38() {
  secden[29] {	pt3dadd(-242.778, -141.562, -128.52, 1.27668)
	pt3dadd(-243.151, -141.825, -129.41, 1.27448)
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  }
}
proc shape3d_39() {
  secden[29] {	pt3dadd(-348.215, -245.643, -257.28, 0.902668)
	pt3dadd(-348.645, -246.3, -257.899, 0.901112)
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  }
}
proc shape3d_40() {
  secden[29] {	pt3dadd(-454.55, -386.728, -390.928, 0.930234)
	pt3dadd(-456.883, -387.59, -395.265, 0.930234)
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  }
}
proc shape3d_41() {
  secden[33] {	pt3dadd(-450.129, -315.623, -75.547, 0.793459)
	pt3dadd(-451, -316.013, -75.2366, 0.792098)
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  }
}
proc shape3d_42() {
  tuftden {	pt3dadd(10.012, 209.915, 25.8276, 0.8)
	pt3dadd(10.4036, 210.708, 26.2942, 0.8)
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  }
}
proc shape3d_43() {
  tuftden[3] {	pt3dadd(-21.7625, 184.428, 7.09999, 1.12001)
	pt3dadd(-22.6518, 184.876, 7.19141, 0.960005)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
}

// objref somden, somatic, secdens, tufts, dendritic
// proc subsets() { local i
//   objref somden, somatic, secdens, tufts, dendritic
//   somden = new SectionList()
//     soma somden.append()
//     for i=0, 33 secden[i] somden.append()
//     priden somden.append()
//     for i=0, 4 tuftden[i] somden.append()

//   somatic = new SectionList()
//     soma somatic.append()

//   secdens = new SectionList()
//     for i=0, 33 secden[i] secdens.append()

//   tufts = new SectionList()
//     for i=0, 4 tuftden[i] tufts.append()

//   dendritic = new SectionList()
//     for i=0, 33 secden[i] dendritic.append()
//     priden dendritic.append()
//     for i=0, 4 tuftden[i] dendritic.append()
// }

proc geometry() {
  soma {  L = 8.3791  diam = 14.513  }
  secden {  L = 40  diam = 2.17442  }
  secden[1] {  L = 40  diam = 2.1744  }
  priden {  L = 203.15  diam = 4.0037  }
  secden[2] {  L = 79.9344  diam = 1.9619  }
  secden[3] {  L = 60  diam = 1.9949  }
  secden[4] {  L = 720  diam = 1.1081  }
  secden[5] {  L = 640  diam = 1.1583  }
  secden[6] {  L = 59.993  diam = 1.7978  }
  secden[7] {  L = 79.879  diam = 1.7682  }
  secden[8] {  L = 180  diam = 1.4707  }
  secden[9] {  L = 99.999  diam = 1.5675  }
  secden[10] {  L = 180  diam = 1.0765  }
  secden[11] {  L = 479.87  diam = 0.8711  }
  secden[12] {  L = 700  diam = 0.56  }
  secden[13] {  L = 79.999  diam = 0.8538  }
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  tuftden {  L = 80  diam = 1.4605  }
  tuftden[1] {  L = 60  diam = 1.622  }
  tuftden[2] {  L = 80  diam = 1.4605  }
  tuftden[3] {  L = 60  diam = 1.622  }
  tuftden[4] {  L = 79.958  diam = 1.4609  }
  initialseg{ L=30  diam=1.5}
  hillock { L=5  diam(0:1) = soma.diam(0) : initialseg.diam(0) }
    forsec "node" { L=1 diam=1 }
    forsec "myelin" { L=1000  diam=1.5}

}
// proc segments() {
//    soma { nseg = 1  }
//    secden { nseg = 2  }
//    secden[1] { nseg = 1  }
//    priden { nseg = 10  }
//    secden[2] { nseg = 4  }
//    secden[3] { nseg = 3  }
//    secden[4] { nseg = 36  }
//    secden[5] { nseg = 32  }
//    secden[6] { nseg = 3  }
//    secden[7] { nseg = 4  }
//    secden[8] { nseg = 9  }
//    secden[9] { nseg = 5  }
//    secden[10] { nseg = 9  }
//    secden[11] { nseg = 24  }
//    secden[12] { nseg = 35  }
//    secden[13] { nseg = 4  }
//    secden[14] { nseg = 34  }
//    secden[15] { nseg = 1  }
//    secden[16] { nseg = 2  }
//    secden[17] { nseg = 13  }
//    secden[18] { nseg = 5  }
//    secden[19] { nseg = 27  }
//    secden[20] { nseg = 22  }
//    secden[21] { nseg = 8  }
//    secden[22] { nseg = 2  }
//    secden[23] { nseg = 27  }
//    secden[24] { nseg = 9  }
//    secden[25] { nseg = 7  }
//    secden[26] { nseg = 12  }
//    secden[27] { nseg = 3  }
//    secden[28] { nseg = 10  }
//    secden[29] { nseg = 24  }
//    secden[30] { nseg = 2  }
//    secden[31] { nseg = 1  }
//    secden[32] { nseg = 1  }
//    secden[33] { nseg = 12  }
//    tuftden { nseg = 4  }
//    tuftden[1] { nseg = 3  }
//    tuftden[2] { nseg = 4  }
//    tuftden[3] { nseg = 2  }
//    tuftden[4] { nseg = 4  }
// }

proc re_init_rng() {localobj sf
    strdef full_str, name

    sf = new StringFunctions()

    if(numarg() == 1) {
        // We received a third seed
        channel_seed = $1
        channel_seed_set = 1
    } else {
        channel_seed_set = 0
    }
  }

endtemplate MOBopl_mTC_bSTUT_new_raw
